OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Bandstop and Bandpass => #1
  LowCutFrequency = 0.5
  HighCutFrequency = 100
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> Common Average Reference => #2
Data=#2 -> Signal display "Spatial FIltered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1 -> Signal display "Bandpass filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Signal stream, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
