OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> TCP Writer
  Port = 5678
  Output format = Raw
#0.Signal stream -> Channel Selector "1:4" => #2
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
-> Bandstop and Bandpass => #3
  LowCutFrequency = 0.5
  HighCutFrequency = 100
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
Data=#4, Channel Units=#0.Channel units -> Signal display "Spatial FIltered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#3, Channel Units=#0.Channel units -> Signal display "Bandpass filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Signal stream, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "5" => #8
  Channel List = 5
  Action = Select
  Channel Matching Method = Smart
Keyboard stimulator => #9
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
EEG=#2, EOG=#8, Stimulations=#9 -> EOG Denoising Calibration
  Filename b Matrix = C:/Users/Bartuc/Desktop/b-Matrix-EEG.cfg
  End trigger = OVTK_GDF_End_Of_Session
Input stream=#4, Stimulations stream=#9 -> CSV File Writer
  Filename = C:/Users/Bartuc/Desktop/csv_test.csv
  Precision = 10
  Append data = false
  Only last matrix = false

External Processing
  Launch third party program = true
  Executable path =
  Arguments =
  Port = 0
  Automatic connection identifier = true
  Custom connection identifier =
  Incoming connection timeout = 10
  Generator = false
