OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

BCI Stimulator => #0
  Lua Script = C:/Users/Bartuc/AppData/Roaming/openvibe-2.1.0/scenarios/bci-examples/motor-imagery/Trial_motor_imagery.lua
  Number of Trials for Each Class = 8
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
  Third Class = OVTK_GDF_Down
  Fourth Class = OVTK_GDF_Up
  Fifth Class = OVTK_GDF_Tongue
-> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/Bartuc/Desktop/Zavrsni/PNG_images/Left_leg.png
  Stimulation 1 = OVTK_GDF_Left
  Cue Image 2 = C:/Users/Bartuc/Desktop/Zavrsni/PNG_images/Right_leg.png
  Stimulation 2 = OVTK_GDF_Right
  Cue Image 3 = C:/Users/Bartuc/Desktop/Zavrsni/PNG_images/Hand_pointing_left.png
  Stimulation 3 = OVTK_GDF_Up
  Cue Image 4 = C:/Users/Bartuc/Desktop/Zavrsni/PNG_images/Hand_pointing_right.png
  Stimulation 4 = OVTK_GDF_Down
  Cue Image 5 = C:/Users/Bartuc/Desktop/Zavrsni/PNG_images/tongue.png
  Stimulation 5 = OVTK_GDF_Tongue
Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input signal=#2.Signal stream, Input stimulations=#0 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
